PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -0.4510, 0.0196, 0.4118
  expName = First Attempt at Part 3 Expt Script
  keyboardBackend = ioHub
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Routines
  Routine trial
    MovieComponent silentFilm
      backend = moviepy
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 55.0
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    TextComponent attendNote
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Attend to the music
    TextComponent dontAttendNote
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Do not attend to the music
    SoundComponent stimulus
      sound = $stimuli
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 30.0
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  Routine break_2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Well done, it's time for a five minute break.
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  Routine instructions
    TextComponent top_instr_txt
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        Welcome to Part 3 of the experiment. The instructions are as follows:




        If you have any questions at all please ask the experimenters.
    MouseComponent mouse_2
      clickable = nextButton_instruct
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_instruct
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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  Routine Ready1stBlock
    TextComponent top_instr_txt_3
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Are you ready for the first block of trials?
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    MouseComponent mouse_4
      clickable = nextButton_R1B
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_R1B
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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  Routine Ready
    TextComponent top_instr_txt_2
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        Welcome to Part 3 of the experiment. The instructions are as follows:

        First, you will be told if you should attend, or not attend, to the music piece that will be played.

        Then, a random music clip will be played. A silent film will also be played. Remember, nou will not have to answer any questions during the trials - just try to focus/not focus on the music as instructed. Please try not to blink or move during this 30s period.

        There will then be a 25s break (blink/stretch/etc as much as you like during this), before the next trial begins.

        After eight trials, there will be a five minute break, before the final seven trials run.

        If you have any questions at all please ask the experimenters.
    MouseComponent mouse_3
      clickable = nextButton_R
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_R
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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  Routine interTrialPause
    TextComponent Break25s
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = 25 second break - feel free to stretch/blink/etc.
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Flow
  Routine instructions
  Routine Ready1stBlock
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine trial
    Routine interTrialPause
  LoopTerminator trials
  Routine trial
  Routine break_2
  Routine Ready
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine trial
    Routine interTrialPause
  LoopTerminator trials_2
  Routine trial
